PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = poker_test
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Routines
  Routine trial
    TextComponent handCapital
      letterHeight = 0.05
      pos = (-0.5,0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        you hand
            5
    TextComponent hand2Capital
      letterHeight = 0.05
      pos = (0.5,0.4)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        your opponent's hand
            X
    TextComponent decks
      letterHeight = 0.05
      pos = (0,-0.4)
      startVal [time (s)] = 0.0
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      text:
        Current decks
        2,3,4,5,6,7,8
    KeyboardComponent betCheck
      allowedKeys = 'b','f','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
