PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = testTrialnumber
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = None
      pos [set every repeat] = (0, 0)
      size = (0.5, 0.5)
      startVal [condition] = trial
      stopVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 'trial','non'
    loopType = random
    nReps = 5
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  LoopTerminator trials
